opentrons/protocol-designer 8.2.3
schemaVersion: 8
protocolName: BombBio Trizol RNA v2
author: Jared Bard
robot: {model: OT-3 Standard, deckId: ot3_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p50_multi_flex: {mount: left}
  p1000_multi_flex: {mount: right}
moduleLocationUpdate:
  thermocyclerModuleV2: {location: B1}
  temperatureModuleV2: {location: C1}
  magneticBlockV1: {location: D1}
labwareLocationUpdate:
  Agilent 1 Well Reservoir 290 mL (slot A2): {loadName: agilent_1_reservoir_290ml, namespace: opentrons, version: 1, location: A2}
  VWR 96 Well Plate 2500 µL (slot B2): {loadName: vwr_96_wellplate_2500ul, namespace: custom_beta, version: 1, location: B2}
  Opentrons Flex 96 Filter Tip Rack 1000 µL (1): {loadName: opentrons_flex_96_filtertiprack_1000ul, namespace: opentrons, version: 1, location: A3}
  Opentrons Flex 96 Filter Tip Rack 1000 µL (2): {loadName: opentrons_flex_96_filtertiprack_1000ul, namespace: opentrons, version: 1, location: B3}
  Opentrons Flex 96 Filter Tip Rack 50 µL (1): {loadName: opentrons_flex_96_filtertiprack_50ul, namespace: opentrons, version: 1, location: D4}
  Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt: {loadName: opentrons_96_wellplate_200ul_pcr_full_skirt, namespace: opentrons, version: 2, location: C3}
  Agilent 1 Well Reservoir 290 mL (slot D2): {loadName: agilent_1_reservoir_290ml, namespace: opentrons, version: 1, location: D2}
  VWR 96 Well Plate 2500 µL (slot D1): {loadName: vwr_96_wellplate_2500ul, namespace: custom_beta, version: 1, location: magneticBlockV1}
pipetteTiprackAssignments:
  p50_multi_flex: [opentrons/opentrons_flex_96_filtertiprack_50ul/1]
  p1000_multi_flex: [opentrons/opentrons_flex_96_filtertiprack_1000ul/1]
ingredients:
  - Ethanol 90%
  - DnaseI
  - Binding Buffer
  - minTE
  - Sample: {description: Sample  + Binding buffer + Beads}
ingredLocations:
  Agilent 1 Well Reservoir 290 mL (slot A2):
    Ethanol 90% {volume: 100000}: A1
  VWR 96 Well Plate 2500 µL (slot B2):
    DnaseI {volume: 125}: A1-H1
    Binding Buffer {volume: 550}: A2-H2
    minTE {volume: 75}: E3-H3, A3-D3
  VWR 96 Well Plate 2500 µL (slot D1):
    Sample {volume: 420}: A1-H1
savedStepForms:
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:02:00
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 450
  path: single
  changeTip: always
  aspirate_labware: VWR 96 Well Plate 2500 µL (slot D1)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 50
  dispense_labware: Agilent 1 Well Reservoir 290 mL (slot D2)
  dispense_wells: A1
  dispense_flowRate: 200
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: C2
  useGripper: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 950
  path: single
  changeTip: always
  aspirate_labware: Agilent 1 Well Reservoir 290 mL (slot A2)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 100
  dispense_labware: VWR 96 Well Plate 2500 µL (slot D1)
  dispense_wells: A1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 3
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 400
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  blowout_z_offset: -10
  dropTip_location: wasteChute
  preWetTip: true
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: magneticBlockV1
  useGripper: true
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:02:00
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 950
  path: single
  changeTip: always
  aspirate_labware: VWR 96 Well Plate 2500 µL (slot D1)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 100
  dispense_labware: Agilent 1 Well Reservoir 290 mL (slot D2)
  dispense_wells: A1
  dispense_flowRate: 200
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: C2
  useGripper: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 500
  path: single
  changeTip: always
  aspirate_labware: Agilent 1 Well Reservoir 290 mL (slot A2)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 100
  dispense_labware: VWR 96 Well Plate 2500 µL (slot D1)
  dispense_wells: A1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 3
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 400
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  blowout_z_offset: -10
  dropTip_location: wasteChute
  preWetTip: true
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: magneticBlockV1
  useGripper: true
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:02:00
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 550
  path: single
  changeTip: always
  aspirate_labware: VWR 96 Well Plate 2500 µL (slot D1)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 100
  dispense_labware: Agilent 1 Well Reservoir 290 mL (slot D2)
  dispense_wells: A1
  dispense_flowRate: 200
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: C2
  useGripper: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 500
  path: single
  changeTip: always
  aspirate_labware: Agilent 1 Well Reservoir 290 mL (slot A2)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 100
  dispense_labware: VWR 96 Well Plate 2500 µL (slot D1)
  dispense_wells: A1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 3
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 400
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  blowout_z_offset: -10
  dropTip_location: wasteChute
  preWetTip: true
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: magneticBlockV1
  useGripper: true
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:02:00
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 550
  path: single
  changeTip: always
  aspirate_labware: VWR 96 Well Plate 2500 µL (slot D1)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 100
  dispense_labware: Agilent 1 Well Reservoir 290 mL (slot D2)
  dispense_wells: A1
  dispense_flowRate: 200
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 50
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 50
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: temperatureModuleV2
  useGripper: true
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:05:00
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 37
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 37
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: VWR 96 Well Plate 2500 µL (slot B2)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 200
  dispense_labware: VWR 96 Well Plate 2500 µL (slot D1)
  dispense_wells: A1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 3
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 80
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  blowout_z_offset: -20
  dropTip_location: wasteChute
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:07:30
- stepType: mix
  stepName: mix
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 80
  times: 10
  changeTip: always
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  wells: A1
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  aspirate_flowRate: 200
  dispense_delay_checkbox: true
  dispense_delay_seconds: 3
  dispense_flowRate: 200
  mix_mmFromBottom: 1
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  blowout_z_offset: -20
  dropTip_location: wasteChute
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:07:30
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 500
  path: single
  changeTip: always
  aspirate_labware: VWR 96 Well Plate 2500 µL (slot B2)
  aspirate_wells: A2
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 100
  dispense_labware: VWR 96 Well Plate 2500 µL (slot D1)
  dispense_wells: A1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 3
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 400
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  blowout_z_offset: -20
  dropTip_location: wasteChute
  preWetTip: true
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Please shake at 1200rpm for 10 minutes. Return to magnetic module
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: magneticBlockV1
  useGripper: false
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:02:00
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 650
  path: single
  changeTip: always
  aspirate_labware: VWR 96 Well Plate 2500 µL (slot D1)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 50
  dispense_labware: Agilent 1 Well Reservoir 290 mL (slot D2)
  dispense_wells: A1
  dispense_flowRate: 200
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: C2
  useGripper: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 900
  path: single
  changeTip: always
  aspirate_labware: Agilent 1 Well Reservoir 290 mL (slot A2)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 100
  dispense_labware: VWR 96 Well Plate 2500 µL (slot D1)
  dispense_wells: A1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 3
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 400
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  dropTip_location: wasteChute
  preWetTip: true
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: magneticBlockV1
  useGripper: true
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:02:00
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 950
  path: single
  changeTip: always
  aspirate_labware: VWR 96 Well Plate 2500 µL (slot D1)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 50
  dispense_labware: Agilent 1 Well Reservoir 290 mL (slot D2)
  dispense_wells: A1
  dispense_flowRate: 200
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: C2
  useGripper: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 500
  path: single
  changeTip: always
  aspirate_labware: Agilent 1 Well Reservoir 290 mL (slot A2)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 100
  dispense_labware: VWR 96 Well Plate 2500 µL (slot D1)
  dispense_wells: A1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 3
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 400
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  dropTip_location: wasteChute
  preWetTip: true
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: magneticBlockV1
  useGripper: true
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:02:00
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 550
  path: single
  changeTip: always
  aspirate_labware: VWR 96 Well Plate 2500 µL (slot D1)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 50
  dispense_labware: Agilent 1 Well Reservoir 290 mL (slot D2)
  dispense_wells: A1
  dispense_flowRate: 200
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: C2
  useGripper: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 500
  path: single
  changeTip: always
  aspirate_labware: Agilent 1 Well Reservoir 290 mL (slot A2)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 100
  dispense_labware: VWR 96 Well Plate 2500 µL (slot D1)
  dispense_wells: A1
  dispense_delay_checkbox: true
  dispense_delay_seconds: 3
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 400
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  dropTip_location: wasteChute
  preWetTip: true
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: magneticBlockV1
  useGripper: true
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:02:00
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_1000ul/1
  volume: 550
  path: single
  changeTip: always
  aspirate_labware: VWR 96 Well Plate 2500 µL (slot D1)
  aspirate_wells: A1
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
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  aspirate_flowRate: 50
  dispense_labware: Agilent 1 Well Reservoir 290 mL (slot D2)
  dispense_wells: A1
  dispense_flowRate: 200
  blowout_checkbox: true
  blowout_flowRate: 716
  blowout_location: dest_well
  dropTip_location: wasteChute
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 50
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 50
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: temperatureModuleV2
  useGripper: true
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:10:00
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 25
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 25
- stepType: moveLabware
  stepName: move
  labware: Opentrons Flex 96 Filter Tip Rack 1000 µL (1)
  newLocation: C2
  useGripper: true
- stepType: moveLabware
  stepName: move
  labware: Opentrons Flex 96 Filter Tip Rack 50 µL (1)
  newLocation: A3
  useGripper: true
- stepType: moveLabware
  stepName: move
  labware: Opentrons Flex 96 Filter Tip Rack 1000 µL (1)
  newLocation: D4
  useGripper: true
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: C2
  useGripper: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_50ul/1
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: VWR 96 Well Plate 2500 µL (slot B2)
  aspirate_wells: A3
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  aspirate_flowRate: 35
  dispense_labware: VWR 96 Well Plate 2500 µL (slot D1)
  dispense_wells: A1
  dispense_flowRate: 57
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 40
  dropTip_location: wasteChute
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:05:00
- stepType: moveLabware
  stepName: move
  labware: VWR 96 Well Plate 2500 µL (slot D1)
  newLocation: magneticBlockV1
  useGripper: true
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseTime: 00:02:00
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi_flex
  tipRack: opentrons/opentrons_flex_96_filtertiprack_50ul/1
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: VWR 96 Well Plate 2500 µL (slot D1)
  aspirate_wells: A1
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  aspirate_flowRate: 35
  dispense_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A1
  dispense_touchTip_checkbox: true
  dropTip_location: wasteChute
labwareDefinitions:
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  custom_beta/vwr_96_wellplate_2500ul/1:
    brand: {brand: VWR, brandId: [75870-792]}
    metadata: {displayName: VWR 96 Well Plate 2500 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.6, yDimension: 85.5, zDimension: 44.4}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: vwr_96_wellplate_2500ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 39.9, totalLiquidVolume: 2500, shape: rectangular, xDimension: 8.25, yDimension: 8.25, x: 14, y: 74.5, z: 4.5}
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commands:
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- waitForDuration: {seconds: 120, message: }
- pickUpTip: {pipetteId: p1000_multi_flex, labwareId: Opentrons Flex 96 Filter Tip Rack 1000 µL (1), wellName: A1}
- aspirate: {pipetteId: p1000_multi_flex, volume: 450, labwareId: VWR 96 Well Plate 2500 µL (slot D1), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 50}
- aspirate: {meta: {isAirGap: true}, pipetteId: p1000_multi_flex, volume: 20, labwareId: VWR 96 Well Plate 2500 µL (slot D1), wellName: A1, wellLocation: {origin: bottom, offset: {z: 40.9, x: 0, y: 0}}, flowRate: 50}
- dispense: {meta: {isAirGap: true}, pipetteId: p1000_multi_flex, volume: 20, labwareId: Agilent 1 Well Reservoir 290 mL (slot D2), wellName: A1, wellLocation: {origin: bottom, offset: {z: 40.22, x: 0, y: 0}}, flowRate: 200}
- dispense: {pipetteId: p1000_multi_flex, volume: 450, labwareId: Agilent 1 Well Reservoir 290 mL (slot D2), wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 200}
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